PsychoPy2experiment version="3.0.0"
Settings
  Experiment info = {'gender': '', 'age': '', 'language': '', 'participant': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[1.000,1.000,1.000]
  expName = experiment2_b
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Routines
  Routine Instruction_Intro
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent lub
      image = Images/Instruction_Screen.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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  Routine Exposure
    ImageComponent Sing_img
      image [set every repeat] = $Picture
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent Pl_img
      image [set every repeat] = $Picture_pl
      pos = (0, 0.2)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
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    TextComponent Sing_txt
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $Singular
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    TextComponent Pl_txt
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 3
      text [set every repeat] = $Plural
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  Routine Instruction_Prod
    ImageComponent image_3
      image = Images/Instruction_Screen_Prod.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Prod
    TextComponent Target_ins1
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 5
      text [set every repeat] = $Number
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    ImageComponent Trigger_img1
      image [set every repeat] = $Trigger_img
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Target_img1
      image [set every repeat] = $Target_img
      pos = (0, 0.2)
      startVal [time (s)] = 5
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    TextComponent Trigger_txt1
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $Trigger_txt
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    CodeComponent textinput
      Code Type = Py
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        txtinp.alignHoriz ='center'
      Each Frame:
        n= len(theseKeys)
        i = 0
        while i < n:

            if theseKeys[i] == 'return' and len(inputText) >1:
                # pressing RETURN means time to stop
                continueRoutine = False
                break

            elif theseKeys[i] == 'backspace':
                inputText = inputText[:-1]  # lose the final character
                i = i + 1

            elif theseKeys[i] == 'space':
                inputText += ' '
                i = i + 1

            elif theseKeys[i] in ['lshift', 'rshift']:
                shift_flag = True
                i = i + 1

            else:
                if len(theseKeys[i]) == 1:
                    # we only have 1 char so should be a normal key,
                    # otherwise it might be 'ctrl' or similar so ignore it
                    if shift_flag:
                        inputText += chr( ord(theseKeys[i]) - ord(' '))
                        shift_flag = False
                    else:
                        inputText += theseKeys[i]

                i = i + 1
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('inputText', inputText)
        inputText=""
    TextComponent txtinp
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 5
      text [set every frame] = $inputText
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    KeyboardComponent text_resp
      forceEndRoutine = False
      startVal [time (s)] = 5
      store = all keys
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  Routine ISI_1sec
    StaticComponent ISI_2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
  Routine Instruction_FC
    ImageComponent image_6
      image = Images/Instruction_Screen_FC.png
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_FC
    TextComponent Target_ins2
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.1
      pos = (0, 0.85)
      startVal [time (s)] = 4
      text [set every repeat] = $Instr
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    ImageComponent Trigger_img2
      image [set every repeat] = $Trigger_img
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent Target_img2
      image [set every repeat] = $Target_img
      pos = (0, 0.2)
      startVal [time (s)] = 4
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    TextComponent Trigger_txt2
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $Trigger_txt
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    TextComponent Target_instr_l
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      pos = (-0.5, -0.9)
      startVal [time (s)] = 4
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      text:
        Press a
    TextComponent Target_instr_r
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.08
      pos = (0.5, -0.8)
      startVal [time (s)] = 4
      text = Press k
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    KeyboardComponent FC_resp
      allowedKeys = 'a','k'
      forceEndRoutine = True
      startVal [time (s)] = 4
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    TextComponent Resp_a
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (-0.5, -0.6)
      startVal [time (s)] = 4
      text [set every repeat] = $a
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    TextComponent Resp_b
      color = $[1.000,-1.000,-1.000]
      letterHeight = 0.3
      pos = (0.5, -0.6)
      startVal [time (s)] = 4
      text [set every repeat] = $k
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  Routine Exposure_2
    ImageComponent image
      image [set every repeat] = $Picture
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Exposure_3
    ImageComponent image_2
      image [set every repeat] = $Picture_pl
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ISI_Pre
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
    PolygonComponent fixation
      fillColor = $[1,1,1]
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = deg
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  Routine Thank_you
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Thank you very much for participating!
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    KeyboardComponent key_resp_3
      allowedKeys = 'q'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Instruction_Intro
  Routine ISI_Pre
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Lists\Voi_exposure.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Plural', 'musapu'), ('Singular', 'musab'), ('Type', 'Alt'), ('Picture', 'Images/apple.jpg'), ('Picture_pl', 'Images/apple_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'larupu'), ('Singular', 'larub'), ('Type', 'Alt'), ('Picture', 'Images/rock.jpg'), ('Picture_pl', 'Images/rock_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'nalipu'), ('Singular', 'nalib'), ('Type', 'Alt'), ('Picture', 'Images/coin.jpg'), ('Picture_pl', 'Images/coin_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'milupu'), ('Singular', 'milub'), ('Type', 'Alt'), ('Picture', 'Images/soap.jpg'), ('Picture_pl', 'Images/soap_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'rumapu'), ('Singular', 'rumab'), ('Type', 'Alt'), ('Picture', 'Images/soldier.jpg'), ('Picture_pl', 'Images/soldier_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'nasapu'), ('Singular', 'nasab'), ('Type', 'Alt'), ('Picture', 'Images/spear.jpg'), ('Picture_pl', 'Images/spear_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'sanupu'), ('Singular', 'sanub'), ('Type', 'Alt'), ('Picture', 'Images/hammock.jpg'), ('Picture_pl', 'Images/hammock_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'minupu'), ('Singular', 'minub'), ('Type', 'Alt'), ('Picture', 'Images/raindrop.jpg'), ('Picture_pl', 'Images/raindrop_pl.jpg'), ('Final_C', 'b')]),
      OrderedDict([('Plural', 'nimupu'), ('Singular', 'nimub'), ('Type', 'Alt'), ('Picture', 'Images/hand.jpg'), ('Picture_pl', 'Images/hand_pl.jpg'), ('Final_C', 'b')])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
    Routine Exposure
    Routine ISI_1sec
  LoopTerminator trials
  Routine Instruction_Prod
  Routine ISI_Pre
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:1
    conditionsFile = Lists\Voi_Prod.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trigger_txt', 'musapu'), ('Target_txt', 'musab'), ('Type', 'Alt'), ('New', 'Given'), ('Target_img', 'Images/apple.jpg'), ('Trigger_img', 'Images/apple_pl.jpg'), ('Final_C', 'b'), ('Target', 'sg')]),
      OrderedDict([('Trigger_txt', 'larupu'), ('Target_txt', 'larub'), ('Type', 'Alt'), ('New', 'Given'), ('Target_img', 'Images/rock.jpg'), ('Trigger_img', 'Images/rock_pl.jpg'), ('Final_C', 'b'), ('Target', 'sg')]),
      OrderedDict([('Trigger_txt', 'nalib'), ('Target_txt', 'nalipu'), ('Type', 'Alt'), ('New', 'Given'), ('Target_img', 'Images/coin_pl.jpg'), ('Trigger_img', 'Images/coin.jpg'), ('Final_C', 'b'), ('Target', 'pl')]),
      OrderedDict([('Trigger_txt', 'milupu'), ('Target_txt', 'milub'), ('Type', 'Alt'), ('New', 'Given'), ('Target_img', 'Images/soap.jpg'), ('Trigger_img', 'Images/soap_pl.jpg'), ('Final_C', 'b'), ('Target', 'sg')]),
      OrderedDict([('Trigger_txt', 'mirab'), ('Target_txt', 'mirapu'), ('Type', 'Alt'), ('New', 'New'), ('Target_img', 'Images/hammer_pl.jpg'), ('Trigger_img', 'Images/hammer.jpg'), ('Final_C', 'b'), ('Target', 'pl')]),
      OrderedDict([('Trigger_txt', 'namab'), ('Target_txt', 'namapu'), ('Type', 'Alt'), ('New', 'New'), ('Target_img', 'Images/worm_pl.jpg'), ('Trigger_img', 'Images/worm.jpg'), ('Final_C', 'b'), ('Target', 'pl')]),
      OrderedDict([('Trigger_txt', 'limipu'), ('Target_txt', 'limib'), ('Type', 'Alt'), ('New', 'New'), ('Target_img', 'Images/ring.jpg'), ('Trigger_img', 'Images/ring_pl.jpg'), ('Final_C', 'b'), ('Target', 'sg')])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
    Routine Test_Prod
    Routine ISI_1sec
  LoopTerminator trials_2
  Routine Instruction_FC
  Routine ISI_Pre
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 0:4
    conditionsFile = Lists\Voi_FC.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trigger_txt', 'rumab'), ('a', 'rumapu'), ('k', 'rumabu'), ('New_seg', 'Given'), ('Type', 'Alt'), ('Target_img', 'Images/soldier.jpg'), ('Trigger_img', 'Images/soldier_pl.jpg'), ('Final_C', 'b'), ('Corr', 'a'), ('Target', 'pl')]),
      OrderedDict([('Trigger_txt', 'nasapu'), ('a', 'nasap'), ('k', 'nasab'), ('New_seg', 'Given'), ('Type', 'Alt'), ('Target_img', 'Images/spear.jpg'), ('Trigger_img', 'Images/spear_pl.jpg'), ('Final_C', 'b'), ('Corr', 'k'), ('Target', 'sg')]),
      OrderedDict([('Trigger_txt', 'sanub'), ('a', 'sanupu'), ('k', 'sanubu'), ('New_seg', 'Given'), ('Type', 'Alt'), ('Target_img', 'Images/hammock.jpg'), ('Trigger_img', 'Images/hammock_pl.jpg'), ('Final_C', 'b'), ('Corr', 'a'), ('Target', 'pl')]),
      OrderedDict([('Trigger_txt', 'minupu'), ('a', 'minup'), ('k', 'minub'), ('New_seg', 'Given'), ('Type', 'Alt'), ('Target_img', 'Images/raindrop.jpg'), ('Trigger_img', 'Images/raindrop_pl.jpg'), ('Final_C', 'b'), ('Corr', 'k'), ('Target', 'sg')]),
      OrderedDict([('Trigger_txt', 'musupu'), ('a', 'musub'), ('k', 'musup'), ('New_seg', 'New'), ('Type', 'Alt'), ('Target_img', 'Images/dog.jpg'), ('Trigger_img', 'Images/dog_pl.jpg'), ('Final_C', 'b'), ('Corr', 'a'), ('Target', 'sg')]),
      OrderedDict([('Trigger_txt', 'sinapu'), ('a', 'sinap'), ('k', 'sinab'), ('New_seg', 'New'), ('Type', 'Alt'), ('Target_img', 'Images/tree.jpg'), ('Trigger_img', 'Images/tree_pl.jpg'), ('Final_C', 'b'), ('Corr', 'k'), ('Target', 'sg')])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
    Routine Test_FC
    Routine ISI_1sec
  LoopTerminator trials_3
  Routine Thank_you
