PsychoPy2experiment version="3.0.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = untitled
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Routines
  Routine Instruction_Intro
    TextComponent Instr_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        In this experiment Lub will teach you his language.

        He will show you various items, and what they are called in Lubese.

        Repeat every word he shows you out loud for yourself.

        Press SPACE when you are ready.
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction_Intro
